CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Choose the whole `tiffs` folder.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does containregexp "[0-9]+\\.tif")
    Name to assign these images:channels_split
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "_mask.tiff")
    Name to assign these images:cellmask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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notes:['Somehow converting in NamesAndTypes does not work in 3.1.5.', 'Thus I load the image here and then relabel.']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
    Select the input image:cellmask
    Name the output object:cell
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

Smooth Multichannel:[module_num:6|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notes:['Removes outlier pixels.']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
    Select the input image:channels_split
    Name the output image:channels_split_Filtered
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

MeasureObjectIntensity:[module_num:7|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
    Hidden:1
    Select an image to measure:channels_split_Filtered
    Select objects to measure:cell

MeasureObjectIntensityDistribution:[module_num:8|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
    Hidden:1
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:1
    Select an image to measure:channels_split_Filtered
    Select objects to measure:cell
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
ExportToSpreadsheet:[module_num:9|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notes:['Save the data to csv.', "Note that the intensity values are all scaled by a scaling factor corresponding to the bit depth (can be found in the Image.csv 'Scale' column.", 'For uint16 everything is divided by 2**16 = 65535']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:cell|Location_CenterMassIntensity_Y_channels_split_Filtered,cell|Location_CenterMassIntensity_X_channels_split_Filtered,cell|Location_Center_Y,cell|Location_Center_X,cell|RadialDistribution_ZernikePhase_channels_split_Filtered_1_1,cell|RadialDistribution_ZernikePhase_channels_split_Filtered_0_0,cell|RadialDistribution_ZernikeMagnitude_channels_split_Filtered_1_1,cell|RadialDistribution_ZernikeMagnitude_channels_split_Filtered_0_0,cell|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:cell

RescaleIntensity:[module_num:11|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
    Select the input image:channels_split_Filtered
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0001
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
GrayToColor:[module_num:12|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
    Select a color scheme:RGB
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    Select the image to be colored green:RescaleIntensity
    Select the image to be colored blue:OrigOverlay
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:ColorImage
    Select method for constructing file names:Single name
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    Enter single file name:Overlay
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:cell
    Select neighboring objects to measure:cell
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
